# Generated by Configurator on Wed Aug 11 18:20:46 PDT 2010

# Reset
Property,Core,Initialize,0

# Devices
Device,DECam 1,DECamera,DECam
Device,DECam 2,DECamera,DECam

# Pre-init settings for devices
Property,DECam 1,IP Address,127.0.0.1
Property,DECam 1,Read Port,48880
Property,DECam 1,Write Port,48879
Property,DECam 1,Camera Name,DE Controller 1
Property,DECam 2,Camera Name,DE Controller 2
Property,DECam 2,IP Address,127.0.0.1
Property,DECam 2,Read Port,48880
Property,DECam 2,Write Port,48879

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,DECam 1
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

