# Generated by Configurator on Sat Oct 06 16:58:29 PDT 2012

# Reset
Property,Core,Initialize,0

# Devices
Device,TSICam,TSI,TSICam
Device,DHub,DemoCamera,DHub
Device,DWheel,DemoCamera,DWheel
Device,DObjective,DemoCamera,DObjective
Device,DShutter,DemoCamera,DShutter

# Pre-init settings for devices
Property,TSICam,CameraID,0

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,TSICam
Property,Core,Shutter,DShutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DWheel
Label,DWheel,9,State-9
Label,DWheel,8,State-8
Label,DWheel,7,State-7
Label,DWheel,6,State-6
Label,DWheel,5,State-5
Label,DWheel,4,State-4
Label,DWheel,3,State-3
Label,DWheel,2,CY5
Label,DWheel,1,FITC
Label,DWheel,0,DAPI
# DObjective
Label,DObjective,5,empty-5
Label,DObjective,4,empty-4
Label,DObjective,3,empty-3
Label,DObjective,2,40X
Label,DObjective,1,20X
Label,DObjective,0,10X

# Configuration presets
# Group: Channel
# Preset: CY5
ConfigGroup,Channel,CY5,DWheel,Label,CY5

# Preset: DAPI
ConfigGroup,Channel,DAPI,DWheel,Label,DAPI

# Preset: FITC
ConfigGroup,Channel,FITC,DWheel,Label,FITC

# Preset: State-9
ConfigGroup,Channel,State-9,DWheel,Label,State-9

# Preset: State-8
ConfigGroup,Channel,State-8,DWheel,Label,State-8

# Preset: State-7
ConfigGroup,Channel,State-7,DWheel,Label,State-7

# Preset: State-6
ConfigGroup,Channel,State-6,DWheel,Label,State-6

# Preset: State-5
ConfigGroup,Channel,State-5,DWheel,Label,State-5

# Preset: State-4
ConfigGroup,Channel,State-4,DWheel,Label,State-4

# Preset: State-3
ConfigGroup,Channel,State-3,DWheel,Label,State-3



# PixelSize settings

