# Generated by Configurator on Mon Feb 28 13:22:54 PST 2011

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,XYStage,Thorlabs,XYStage
Device,DCam,DemoCamera,DCam
Device,DShutter,DemoCamera,DShutter
Device,ZStage,DemoCamera,DStage

# Pre-init settings for devices
Property,XYStage,Port,COM9

# Pre-init settings for COM ports
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,115200
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,DShutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

