# Generated by Configurator on Tue Mar 06 16:53:15 PST 2012

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,COM1,SerialManager,COM1
Device,XY,DemoCamera,DXYStage
Device,Shutter,DemoCamera,DShutter
Device,BitFlowCamera,TwoPhoton,BitFlowCamera
Device,Laser1,TwoPhoton,DemoLaser
Device,EOM1,NI100X,AnalogIO
Device,EOM2,NI100X,AnalogIO
Device,EOM12Shutter,TwoPhoton,V2Shutter
Device,Blue,NI100X,AnalogIO
Device,Green,NI100X,AnalogIO
Device,Yellow,NI100X,AnalogIO
Device,Red,NI100X,AnalogIO
Device,Laser2,TwoPhoton,DemoLaser
Device,DObjective,DemoCamera,DObjective
Device,Z,PI,PIZStage

# Pre-init settings for devices
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,EOM1,IOChannel,cDAQ1Mod1/ao0
Property,EOM1,MaxVolts,5.0000
Property,EOM1,MinVolts,0.0000
Property,EOM1,Demo,Yes
Property,EOM2,IOChannel,cDAQ1Mod1/ao1
Property,EOM2,MaxVolts,5.0000
Property,EOM2,MinVolts,0.0000
Property,EOM2,Demo,Yes
Property,Blue,IOChannel,cDAQ1Mod1/ao2
Property,Blue,MaxVolts,10.0
Property,Blue,MinVolts,0.0000
Property,Blue,Demo,Yes
Property,Green,IOChannel,cDAQ1Mod1/ao3
Property,Green,MaxVolts,10.0
Property,Green,MinVolts,0.0000
Property,Green,Demo,Yes
Property,Yellow,IOChannel,cDAQ1Mod1/ao4
Property,Yellow,MaxVolts,10.0
Property,Yellow,MinVolts,0.0000
Property,Yellow,Demo,Yes
Property,Red,IOChannel,cDAQ1Mod1/ao5
Property,Red,MaxVolts,10.0
Property,Red,MinVolts,0.0000
Property,Red,Demo,Yes
Property,Z,MaxZ_um,500.0000
Property,Z,Port,COM1
Property,Z,WaitForResponse,No

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,BitFlowCamera
Property,Core,Shutter,EOM12Shutter
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DObjective
Label,DObjective,5,Objective-5
Label,DObjective,4,Objective-4
Label,DObjective,3,Objective-3
Label,DObjective,2,Objective-2
Label,DObjective,1,HiRes
Label,DObjective,0,LowRes

# Configuration presets
# Group: PIFoc
# Preset: NewPreset
ConfigGroup,PIFoc,NewPreset,Z,Position,0.0000


# Group: Color-Red
# Preset: 3
ConfigGroup,Color-Red,3,BitFlowCamera,R,3

# Preset: 2
ConfigGroup,Color-Red,2,BitFlowCamera,R,2

# Preset: 1
ConfigGroup,Color-Red,1,BitFlowCamera,R,1

# Preset: 0
ConfigGroup,Color-Red,0,BitFlowCamera,R,0


# Group: Channel
# Preset: Green
ConfigGroup,Channel,Green,BitFlowCamera,InputChannel,1
ConfigGroup,Channel,Green,EOM1,ListIndex,0
ConfigGroup,Channel,Green,EOM2,ListIndex,0
ConfigGroup,Channel,Green,Blue,ListIndex,0
ConfigGroup,Channel,Green,Green,ListIndex,0
ConfigGroup,Channel,Green,Yellow,ListIndex,0
ConfigGroup,Channel,Green,Red,ListIndex,0

# Preset: Red
ConfigGroup,Channel,Red,BitFlowCamera,InputChannel,3
ConfigGroup,Channel,Red,EOM1,ListIndex,1
ConfigGroup,Channel,Red,EOM2,ListIndex,1
ConfigGroup,Channel,Red,Blue,ListIndex,1
ConfigGroup,Channel,Red,Green,ListIndex,1
ConfigGroup,Channel,Red,Yellow,ListIndex,1
ConfigGroup,Channel,Red,Red,ListIndex,1

# Preset: Yellow
ConfigGroup,Channel,Yellow,BitFlowCamera,InputChannel,2
ConfigGroup,Channel,Yellow,EOM1,ListIndex,0
ConfigGroup,Channel,Yellow,EOM2,ListIndex,0
ConfigGroup,Channel,Yellow,Blue,ListIndex,0
ConfigGroup,Channel,Yellow,Green,ListIndex,0
ConfigGroup,Channel,Yellow,Yellow,ListIndex,0
ConfigGroup,Channel,Yellow,Red,ListIndex,0

# Preset: Blue
ConfigGroup,Channel,Blue,BitFlowCamera,InputChannel,0
ConfigGroup,Channel,Blue,EOM1,ListIndex,0
ConfigGroup,Channel,Blue,EOM2,ListIndex,0
ConfigGroup,Channel,Blue,Blue,ListIndex,0
ConfigGroup,Channel,Blue,Green,ListIndex,0
ConfigGroup,Channel,Blue,Yellow,ListIndex,0
ConfigGroup,Channel,Blue,Red,ListIndex,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,EOM12Shutter,DAC1,EOM1
ConfigGroup,System,Startup,EOM12Shutter,DAC2,EOM2
ConfigGroup,System,Startup,BitFlowCamera,Deinterlace,On+Warp
ConfigGroup,System,Startup,DObjective,Label,LowRes


# Group: Illumination
# Preset: Sttings2
ConfigGroup,Illumination,Sttings2,EOM1,Volts,2.2950
ConfigGroup,Illumination,Sttings2,EOM2,Volts,3.4050
ConfigGroup,Illumination,Sttings2,Blue,Volts,5.2400
ConfigGroup,Illumination,Sttings2,Green,Volts,2.8100
ConfigGroup,Illumination,Sttings2,Yellow,Volts,5.8900
ConfigGroup,Illumination,Sttings2,Red,Volts,3.4100

# Preset: MySettings
ConfigGroup,Illumination,MySettings,EOM1,Volts,0.6850
ConfigGroup,Illumination,MySettings,EOM2,Volts,1.4900
ConfigGroup,Illumination,MySettings,Blue,Volts,2.0600
ConfigGroup,Illumination,MySettings,Green,Volts,2.7800
ConfigGroup,Illumination,MySettings,Yellow,Volts,0.0000
ConfigGroup,Illumination,MySettings,Red,Volts,0.0000


# Group: Color-Green
# Preset: 3
ConfigGroup,Color-Green,3,BitFlowCamera,G,3

# Preset: 2
ConfigGroup,Color-Green,2,BitFlowCamera,G,2

# Preset: 1
ConfigGroup,Color-Green,1,BitFlowCamera,G,1

# Preset: 0
ConfigGroup,Color-Green,0,BitFlowCamera,G,0


# Group: Deinterlace
# Preset: On
ConfigGroup,Deinterlace,On,BitFlowCamera,Deinterlace,On

# Preset: On+Warp
ConfigGroup,Deinterlace,On+Warp,BitFlowCamera,Deinterlace,On+Warp

# Preset: Off
ConfigGroup,Deinterlace,Off,BitFlowCamera,Deinterlace,Off


# Group: Color-Blue
# Preset: 3
ConfigGroup,Color-Blue,3,BitFlowCamera,B,3

# Preset: 2
ConfigGroup,Color-Blue,2,BitFlowCamera,B,2

# Preset: 1
ConfigGroup,Color-Blue,1,BitFlowCamera,B,1

# Preset: 0
ConfigGroup,Color-Blue,0,BitFlowCamera,B,0


# Group: Camera
# Preset: Demo
ConfigGroup,Camera,Demo,BitFlowCamera,Mode,Demo

# Preset: Hardware
ConfigGroup,Camera,Hardware,BitFlowCamera,Mode,Hardware


# Group: Offset
# Preset: NewPreset
ConfigGroup,Offset,NewPreset,BitFlowCamera,CenterOffset,0


# Group: Show PMT
# Preset: 3
ConfigGroup,Show PMT,3,BitFlowCamera,InputChannel,3

# Preset: 2
ConfigGroup,Show PMT,2,BitFlowCamera,InputChannel,2

# Preset: 1
ConfigGroup,Show PMT,1,BitFlowCamera,InputChannel,1

# Preset: 0
ConfigGroup,Show PMT,0,BitFlowCamera,InputChannel,0


# Group: Mode
# Preset: RGB
ConfigGroup,Mode,RGB,BitFlowCamera,ColorMode,RGB

# Preset: Grayscale
ConfigGroup,Mode,Grayscale,BitFlowCamera,ColorMode,Grayscale

# Preset: Multichannel
ConfigGroup,Mode,Multichannel,BitFlowCamera,ColorMode,Multichannel



# PixelSize settings
# Resolution preset: LowRes
ConfigPixelSize,LowRes,DObjective,Label,LowRes
PixelSize_um,LowRes,1.0

# Resolution preset: HiRes
ConfigPixelSize,HiRes,DObjective,Label,HiRes
PixelSize_um,HiRes,0.5


