# Generated by Configurator on Thu Mar 25 14:56:47 PDT 2010

# Reset
Property,Core,Initialize,0

# Devices
Device,DCam,DemoCamera,DCam
Device,DWheel,DemoCamera,DWheel
Device,DStateDevice,DemoCamera,DStateDevice
Device,DObjective,DemoCamera,DObjective
Device,DStage,DemoCamera,DStage
Device,DXYStage,DemoCamera,DXYStage
Device,DLightPath,DemoCamera,DLightPath
Device,DAutoFocus,DemoCamera,DAutoFocus
Device,DShutter,DemoCamera,DShutter
Device,D-DA,DemoCamera,D-DA
Device,DOptovar,DemoCamera,DOptovar
Device,SimpleAutofocus,SimpleAutofocus,SimpleAutofocus

# Pre-init settings for devices
Property,DStateDevice,Number of positions,10

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,DShutter
Property,Core,Focus,DStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# DWheel
Label,DWheel,9,State-9
Label,DWheel,8,State-8
Label,DWheel,7,State-7
Label,DWheel,6,State-6
Label,DWheel,5,State-5
Label,DWheel,4,State-4
Label,DWheel,3,State-3
Label,DWheel,2,State-2
Label,DWheel,1,State-1
Label,DWheel,0,State-0
# DStateDevice
Label,DStateDevice,9,State-9
Label,DStateDevice,8,State-8
Label,DStateDevice,7,State-7
Label,DStateDevice,6,State-6
Label,DStateDevice,5,State-5
Label,DStateDevice,4,State-4
Label,DStateDevice,3,State-3
Label,DStateDevice,2,State-2
Label,DStateDevice,1,State-1
Label,DStateDevice,0,State-0
# DObjective
Label,DObjective,5,Objective-5
Label,DObjective,4,Objective-4
Label,DObjective,3,Objective-3
Label,DObjective,2,Objective-2
Label,DObjective,1,Objective-1
Label,DObjective,0,Objective-0
# DLightPath
Label,DLightPath,2,State-2
Label,DLightPath,1,State-1
Label,DLightPath,0,State-0

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

