# clear existing devices, if any
Property,Core,Initialize,0

#
# devices
#
#Device,AOTF,ParallelPort,LPT1
Device,Camera,DemoCamera.so,DCam
Device,Dichroic,DemoCamera.so,DWheel
Device,Emission,DemoCamera.so,DWheel
Device,Excitation,DemoCamera.so,DWheel
Device,Objective,DemoCamera.so,DObjective
Device,X,DemoCamera.so,DStage
Device,Y,DemoCamera.so,DStage
Device,Z,DemoCamera.so,DStage

#
# equipment attributes
#
Equipment,Nikon 10X S Fluor,Magnification,10
Equipment,Zeiss 4X Plan Apo,Magnification,4

#
# properties
#
Property,Core,Initialize,1
#Property,AOTF,Description,Parallel port driver
#Property,AOTF,Label,State-0
#Property,AOTF,Name,LPT1
#Property,AOTF,State,0

Property,Camera,Exposure,55
Property,Camera,Name,DCam
Property,Camera,PixelType,8bit

Property,Dichroic,State,0
Property,Emission,State,1
Property,Excitation,State,2
Property,Objective,State,1
Property,X,Position,0
Property,Y,Position,0
Property,Z,Position,0

#
# labels
#
#Label,AOTF,10,980nm
#Label,AOTF,11,760nm

Label,Dichroic,0,400DCLP
Label,Dichroic,1,Q505LP
Label,Dichroic,2,Q585LP

Label,Emission,0,Chroma-D460
Label,Emission,1,Chroma-HQ620
Label,Emission,2,Chroma-HQ535
Label,Emission,3,Chroma-HQ700

Label,Excitation,2,Chroma-D360
Label,Excitation,3,Chroma-HQ480
Label,Excitation,4,Chroma-HQ570
Label,Excitation,5,Chroma-HQ620

Label,Objective,1,Nikon 10X S Fluor
Label,Objective,3,Nikon 20X Plan Fluor ELWD

#
# configurations
#
Config,DAPI,Emission,State,1
Config,DAPI,Excitation,State,2
Config,DAPI,Dichroic,State,0

Config,FITC,Emission,State,2
Config,FITC,Excitation,State,3
Config,FITC,Dichroic,State,1

Config,Rhodamine,Emission,State,3
Config,Rhodamine,Excitation,State,4
Config,Rhodamine,Dichroic,State,2
