# Generated by Configurator on Wed Jul 18 12:07:50 PDT 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,Camera,QCam,QCamera

# Pre-init settings for devices

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,Camera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,Cooler,On
ConfigGroup,System,Startup,Camera,Offset,75
ConfigGroup,System,Startup,Camera,PixelType,12bit

# Preset: Shutdown
ConfigGroup,System,Shutdown,Camera,Cooler,Off
ConfigGroup,System,Shutdown,Camera,Offset,75
ConfigGroup,System,Shutdown,Camera,PixelType,12bit



