# Generated by Configurator on Thu Dec 27 14:00:34 PST 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,DCam,DemoCamera,DCam

# Pre-init settings for devices

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,DCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: CamRes
# Preset: LoRes
ConfigGroup,CamRes,LoRes,DCam,Binning,2
ConfigGroup,CamRes,LoRes,DCam,PixelType,8bit

# Preset: HiRes
ConfigGroup,CamRes,HiRes,DCam,Binning,1
ConfigGroup,CamRes,HiRes,DCam,PixelType,16bit


# Group: Temperature
# Preset: Temperature
ConfigGroup,Temperature,Temperature,DCam,CCDTemperature,0.00


# Group: CameraGain
# Preset: Gain
ConfigGroup,CameraGain,Gain,DCam,Gain,0


# Group: ScanMode
# Preset: ScanMode
ConfigGroup,ScanMode,ScanMode,DCam,ScanMode,1


# Group: Binning
# Preset: Binning
ConfigGroup,Binning,Binning,DCam,Binning,2



# PixelSize settings

