# Generated by Configurator on Wed Dec 03 16:50:25 PST 2008

# Reset
Property,Core,Initialize,0

# Devices
Device,Camera,DemoCamera,DCam
Device,Dichroic,DemoCamera,DWheel
Device,Emission,DemoCamera,DWheel
Device,Excitation,DemoCamera,DWheel
Device,Objective,DemoCamera,DObjective
Device,Z,DemoCamera,DStage
Device,Path,DemoCamera,DLightPath
Device,XY,DemoCamera,DXYStage
Device,Shutter,DemoCamera,DShutter
Device,Autofocus,DemoCamera,DAutoFocus
Device,StreamCam,DemoStreamingCamera,DStreamCam
Device,PROC,DemoStreamingCamera,DNoiseProcessor
Device,SIGGEN,DemoStreamingCamera,DSignalGenerator
Device,LPT1,ParallelPort,LPT1

# Pre-init settings for devices

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays
Delay,Dichroic,100.0

# Roles
Property,Core,Camera,StreamCam
Property,Core,Shutter,Shutter
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Dichroic
Label,Dichroic,9,State-9
Label,Dichroic,8,State-8
Label,Dichroic,7,State-7
Label,Dichroic,6,State-6
Label,Dichroic,5,State-5
Label,Dichroic,4,State-4
Label,Dichroic,3,State-3
Label,Dichroic,2,Q585LP
Label,Dichroic,1,Q505LP
Label,Dichroic,0,400DCLP
# Emission
Label,Emission,9,State-9
Label,Emission,8,State-8
Label,Emission,7,State-7
Label,Emission,6,State-6
Label,Emission,5,State-5
Label,Emission,4,State-4
Label,Emission,3,Chroma-HQ700
Label,Emission,2,Chroma-HQ535
Label,Emission,1,Chroma-D460
Label,Emission,0,Chroma-HQ620
# Excitation
Label,Excitation,9,State-9
Label,Excitation,8,State-8
Label,Excitation,7,State-7
Label,Excitation,6,State-6
Label,Excitation,5,State-5
Label,Excitation,4,State-4
Label,Excitation,3,Chroma-HQ620
Label,Excitation,2,Chroma-HQ570
Label,Excitation,1,Chroma-HQ480
Label,Excitation,0,Chroma-D360
# Objective
Label,Objective,5,Objective-5
Label,Objective,4,Objective-4
Label,Objective,3,Nikon 20X Plan Fluor ELWD
Label,Objective,2,Objective-2
Label,Objective,1,Nikon 10X S Fluor
Label,Objective,0,Nikon 40X Plan Flueor ELWD

# Configuration presets
# Group: Camera
# Preset: MedRes
ConfigGroup,Camera,MedRes,Camera,Binning,2
ConfigGroup,Camera,MedRes,Camera,PixelType,8bit

# Preset: Default
ConfigGroup,Camera,Default,Camera,Binning,1
ConfigGroup,Camera,Default,Camera,PixelType,8bit

# Preset: LowRes
ConfigGroup,Camera,LowRes,Camera,Binning,4
ConfigGroup,Camera,LowRes,Camera,PixelType,8bit

# Preset: HiRes
ConfigGroup,Camera,HiRes,Camera,Binning,1
ConfigGroup,Camera,HiRes,Camera,PixelType,16bit


# Group: Processing
# Preset: None
ConfigGroup,Processing,None,PROC,StdDev,50.00
ConfigGroup,Processing,None,SIGGEN,OutputDevice,
ConfigGroup,Processing,None,Core,ImageProcessor,

# Preset: Add Noise 50
ConfigGroup,Processing,Add Noise 50,PROC,StdDev,50.00
ConfigGroup,Processing,Add Noise 50,SIGGEN,OutputDevice,
ConfigGroup,Processing,Add Noise 50,Core,ImageProcessor,PROC

# Preset: Add Noise 20
ConfigGroup,Processing,Add Noise 20,PROC,StdDev,20.00
ConfigGroup,Processing,Add Noise 20,SIGGEN,OutputDevice,
ConfigGroup,Processing,Add Noise 20,Core,ImageProcessor,PROC

# Preset: LPT1-OUT
ConfigGroup,Processing,LPT1-OUT,PROC,StdDev,50.00
ConfigGroup,Processing,LPT1-OUT,SIGGEN,OutputDevice,LPT1
ConfigGroup,Processing,LPT1-OUT,Core,ImageProcessor,SIGGEN


# Group: PixelSize_um
# Preset: 0.53
ConfigGroup,PixelSize_um,0.53,Objective,Label,Nikon 20X Plan Fluor ELWD

# Preset: 0.243
ConfigGroup,PixelSize_um,0.243,Objective,Label,Nikon 40X Plan Flueor ELWD

# Preset: 1.07
ConfigGroup,PixelSize_um,1.07,Objective,Label,Nikon 10X S Fluor


# Group: Objective
# Preset: 20X
ConfigGroup,Objective,20X,Objective,State,3

# Preset: 40X
ConfigGroup,Objective,40X,Objective,State,0

# Preset: 10X
ConfigGroup,Objective,10X,Objective,State,1


# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Dichroic,Label,Q505LP
ConfigGroup,Channel,FITC,Emission,Label,Chroma-HQ535
ConfigGroup,Channel,FITC,Excitation,Label,Chroma-HQ480

# Preset: Rhodamine
ConfigGroup,Channel,Rhodamine,Dichroic,Label,Q585LP
ConfigGroup,Channel,Rhodamine,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Rhodamine,Excitation,Label,Chroma-HQ570

# Preset: DAPI
ConfigGroup,Channel,DAPI,Dichroic,Label,400DCLP
ConfigGroup,Channel,DAPI,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,DAPI,Excitation,Label,Chroma-D360

# Preset: Cy5
ConfigGroup,Channel,Cy5,Dichroic,Label,400DCLP
ConfigGroup,Channel,Cy5,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Cy5,Excitation,Label,Chroma-HQ570


# Group: LightPath
# Preset: Camera-left
ConfigGroup,LightPath,Camera-left,Path,State,1

# Preset: Eyepiece
ConfigGroup,LightPath,Eyepiece,Path,State,0

# Preset: Camera-right
ConfigGroup,LightPath,Camera-right,Path,State,2



# PixelSize settings
# Resolution preset: Res1
ConfigPixelSize,Res1,Objective,State,1
PixelSize_um,Res1,2.0

# Resolution preset: Res0
ConfigPixelSize,Res0,Objective,State,0
PixelSize_um,Res0,1.0


