# Generated by Configurator on Tue Jan 08 16:39:36 PST 2008

# Reset
Property,Core,Initialize,0

# Devices
Device,Velleman K8055-3,USBManager,Velleman K8055-3
Device,K8055-Hub,K8055,K8055-Hub
Device,K8055-DAC-1,K8055,K8055-DAC-1
Device,K8055-Switch,K8055,K8055-Switch
Device,K8055-Shutter,K8055,K8055-Shutter
Device,K8055-DAC-2,K8055,K8055-DAC-2
Device,K8055-Input,K8055,K8055-Input

# Pre-init settings for devices
Property,Velleman K8055-3,AnswerTimeout,20.00
Property,K8055-Hub,Port,Velleman K8055-3

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Shutter,K8055-Shutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel
# Preset: NewPreset
ConfigGroup,Channel,NewPreset,K8055-Switch,State,0


# Group: DAC-2
# Preset: NewPreset
ConfigGroup,DAC-2,NewPreset,K8055-DAC-2,Volts,0.00


# Group: DAC-1
# Preset: NewPreset
ConfigGroup,DAC-1,NewPreset,K8055-DAC-1,Volts,0.00



# PixelSize settings

