# Generated by Configurator on Mon Jan 15 10:52:33 PST 2007

# Reset
Property,Core,Initialize,0

# Devices
Device,FireCam,dc1394,dc1394_CAM

# Pre-init settings for devices

# Pre-init settings for COM ports

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,FireCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Integration
# Preset:  32
ConfigGroup,Integration, 32,FireCam,Integration,32

# Preset: 256
ConfigGroup,Integration,256,FireCam,Integration,256

# Preset:   8
ConfigGroup,Integration,  8,FireCam,Integration,8

# Preset:   4
ConfigGroup,Integration,  4,FireCam,Integration,4

# Preset:  16
ConfigGroup,Integration, 16,FireCam,Integration,16

# Preset:   2
ConfigGroup,Integration,  2,FireCam,Integration,2

# Preset:   1
ConfigGroup,Integration,  1,FireCam,Integration,1

# Preset: 128
ConfigGroup,Integration,128,FireCam,Integration,128

# Preset:  64
ConfigGroup,Integration, 64,FireCam,Integration,64


# Group: FrameRate
# Preset: 15 fps
ConfigGroup,FrameRate,15 fps,FireCam,Frame Rates, 15 fps

# Preset:  7.5 fps
ConfigGroup,FrameRate, 7.5 fps,FireCam,Frame Rates,  7.5 fps


# Group: Gain
# Preset: 2228
ConfigGroup,Gain,2228,FireCam,Gain,2228

# Preset: 2098
ConfigGroup,Gain,2098,FireCam,Gain,2098

# Preset: 2048
ConfigGroup,Gain,2048,FireCam,Gain,2048

# Preset: 2198
ConfigGroup,Gain,2198,FireCam,Gain,2198

# Preset: 2148
ConfigGroup,Gain,2148,FireCam,Gain,2148


# Group: Shutter
# Preset: 2300
ConfigGroup,Shutter,2300,FireCam,Shutter,2300

# Preset: 2850
ConfigGroup,Shutter,2850,FireCam,Shutter,2850

# Preset: 2800
ConfigGroup,Shutter,2800,FireCam,Shutter,2800

# Preset: 2715
ConfigGroup,Shutter,2715,FireCam,Shutter,2715

# Preset: 2500
ConfigGroup,Shutter,2500,FireCam,Shutter,2500



