# Unload all devices
Property,Core,Initialize,0

# Load devices
Device,COM1,SerialManager,COM4
Device,HUB,NikonTE2000,TE2000
Device,OBJ,NikonTE2000,Nosepiece
Device,FOCUS,NikonTE2000,Focus
Device,FILTER,NikonTE2000,FilterBlock
Device,PATH,NikonTE2000,OpticalPath
Device,CAM,Democamera,DCam
Device,LAMP,NikonTE2000,Lamp

Property,HUB,Port,COM1
Property,COM1,AnswerTimeout,5000

Property,Core,Initialize,1

#Labels
Label,FILTER,1,CY GFP
Label,FILTER,2,GFP(R)-LP
Label,FILTER,3,YFP
Label,FILTER,4,G-2E/C
Label,FILTER,5,D-F-R
Label,FILTER,6,DIA

Label,OBJ,2,20x Plan Apo
Label,OBJ,5,60x Plan Apo

#Configs
ConfigGroup,Channel,CY GFP,FILTER,State,1
ConfigGroup,Channel,GFP(R)-LP,FILTER,State,2
ConfigGroup,Channel,YFP,FILTER,State,3
ConfigGroup,Channel,G-2E/C,FILTER,State,4
ConfigGroup,Channel,D-F-R,FILTER,State,5
ConfigGroup,Channel,DIA,FILTER,State,6

# Roles
Property,Core,Camera,CAM
Property,Core,Focus,FOCUS

# Image synchronization
ImageSynchro,FILTER
ImageSynchro,FOCUS
